<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:p1="clr-namespace:Harp.SoundCard;assembly=Harp.SoundCard"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>S</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateConfigureDO1Payload">
          <p1:ConfigureDO1>Digital</p1:ConfigureDO1>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>SoundCard Commands</Name>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateOutputSetPayload">
          <p1:OutputSet>DO1</p1:OutputSet>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>SoundCard Commands</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>D</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateOutputClearPayload">
          <p1:OutputClear>DO1</p1:OutputClear>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>SoundCard Commands</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>F</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateOutputTogglePayload">
          <p1:OutputToggle>DO1</p1:OutputToggle>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>SoundCard Commands</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>
